PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expInfo['session (1 2 or 3)'], expName, expInfo['date'])
  Experiment info = {'participant': '1', 'session (1 2 or 3)': '-1', 'starting_run': '1', 'skip_practice': '1'}
  Full-screen window = True
  Monitor = prismaMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  color = -0.0039, -0.0039, -0.0039
  expName = MindEye_2back
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instructions
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    TextComponent text
      letterHeight = 5
      startVal [time (s)] = 0.0
      text = put instructions here. press spacebar.
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine set_up
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        practice_participant_conditions_file = "practice_conditions_files/practice_participant" + expInfo["participant"] + ".csv"

        participant = int(expInfo["participant"])
        print("participant: ", participant)

        starting_run = int(expInfo["starting_run"]) - 1
        run = starting_run
        print("starting_run: ", starting_run + 1)

        session = int(expInfo["session (1 2 or 3)"]) - 1
        print("session (1 | 2 | 3): ", session + 1)

        skip_practice = int(expInfo["skip_practice"])
        print("skip_practice: ", skip_practice)

        num_runs = 14 - starting_run
        print("num_runs: ", num_runs)

        first_cond_file = "conditions_files/participant" + expInfo["participant"] + "_run" + str(run) + "_sess" + str(session) + ".csv"
        print("starting condition file: ", first_cond_file)
  Routine waiting_fmri
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    KeyboardComponent key_resp_2
      allowedKeys = '=', 'equal'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text = waiting for scanner…
      units = deg
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  Routine blank_trial
    RoutineSettingsComponent blank_trial
      skipIf = is_not_blank_trial_or_before_starting_run
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    KeyboardComponent blank_trial_testing_keys
      allowedKeys = '1','2','3','4'
      forceEndRoutine = False
      startVal [frame N] = 0
      stopVal [duration (frames)] = 240
      store = all keys
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    PolygonComponent polygon_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      opacity = 0.5
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      units = deg
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  Routine run_wait
    RoutineSettingsComponent run_wait
      skipIf = is_not_new_run
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        is_not_new_run = True
      Begin Routine:
        is_not_new_run = True if not is_new_run else False
    CodeComponent set_up_block
      Code Type = Auto->JS
    TextComponent text_2
      letterHeight = 0.05
      startVal [frame N] = 0
      stopVal [duration (frames)] = 300
      text = waiting.
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  Routine waiting_fmri_2
    RoutineSettingsComponent waiting_fmri_2
      skipIf = not_stopping
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    KeyboardComponent key_resp_4
      allowedKeys = '=', 'equal'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text = waiting for scanner…
      units = deg
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    CodeComponent blank_trial_set_up_3
      Code Type = Py
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      Begin Routine:
        not_stopping = True
  Routine set_skips_and_correct_key
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    CodeComponent blank_trial_set_up
      Code Type = Py
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      Begin Experiment:
        not_stopping = False
      Begin Routine:
        if is_new_run:
            not_stopping = False
        else:
            not_stopping = True
  Routine practice_trial
    RoutineSettingsComponent practice_trial
      skipIf = skip_practice
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    ImageComponent image_2
      image [set every repeat] = $current_image
      size = (8.4, 8.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent polygon_3
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      opacity = 0.5
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      units = deg
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  Routine run_wait2_2
    RoutineSettingsComponent run_wait2_2
      skipIf = not_stopping
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    CodeComponent dynamic_feedback_string
      Code Type = Py
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      Before Experiment:
        run_wait_string = ""
      Begin Experiment:
        run_wait_string = ""
      Begin Routine:
        if is_new_run and run_num >= starting_run:
            run_wait_string = "Good job!" \
                            " Please press any button when you are ready to continue to run " + str(run_num + 2) + "."
            print("run_wait_string: ", run_wait_string)
            run += 1
            print("run: ", run)
    TextComponent text_5
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      units = deg
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      text [set every repeat]:
        $run_wait_string
    KeyboardComponent key_resp_5
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_continue
    RoutineSettingsComponent practice_continue
      skipIf = skip_practice
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text [set every repeat] = Press any button to begin the practice trials.
      units = deg
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  Routine testing_continue
    RoutineSettingsComponent testing_continue
      skipIf = skip_practice
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    KeyboardComponent key_resp_7
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text [set every repeat] = Good job! You finished the practice trials. Press any button to begin the experiment.
      units = deg
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  Routine set_skips_and_correct_key_2
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    CodeComponent blank_trial_set_up_2
      Code Type = Py
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  Routine cue
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    TextComponent text_cue
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $previous_image
      units = deg
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  Routine imagine
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    PolygonComponent polygon_6
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 3
      opacity = 0.5
      shape = rectangle
      size = (8.4, 8.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      units = deg
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  Routine blank
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    PolygonComponent polygon
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      opacity = 0.5
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = deg
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  Routine trial
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    ImageComponent image
      image [set every repeat] = $current_image
      size = (8.4, 8.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent polygon_5
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      opacity = 0.5
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      units = deg
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  Routine short_blank
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    PolygonComponent polygon_4
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      opacity = 0.5
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .25
      units = deg
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  Routine end_run_blank
    RoutineSettingsComponent end_run_blank
      skipIf = is_not_last_trial
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    PolygonComponent polygon_7
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      opacity = 0.5
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 9
      units = deg
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  Routine practice_cue
    RoutineSettingsComponent practice_cue
      skipIf = skip_practice
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    TextComponent text_cue_2
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $cue
      units = deg
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  Routine practice_imagine
    RoutineSettingsComponent practice_imagine
      skipIf = skip_practice
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    PolygonComponent polygon_8
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, 1.0000, 1.0000
      lineWidth = 3
      opacity = 0.5
      shape = rectangle
      size = (8.4, 8.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      units = deg
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  Routine practice_blank
    RoutineSettingsComponent practice_blank
      skipIf = skip_practice
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    PolygonComponent polygon_9
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      opacity = 0.5
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      units = deg
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Flow
  Routine set_up
  Routine practice_continue
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = $practice_participant_conditions_file
    loopType = sequential
    nReps = 1
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    Routine practice_trial
    Routine practice_cue
    Routine practice_imagine
    Routine practice_blank
  LoopTerminator practice
  Routine testing_continue
  Routine waiting_fmri
  LoopInitiator loop_runs loopType="TrialHandler"
    loopType = random
    nReps = num_runs
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    LoopInitiator loop_all_images loopType="TrialHandler"
      conditionsFile = $"conditions_files/participant" + expInfo["participant"] + "_run" + str(run) + "_sess" + str(session) + ".csv"
      loopType = sequential
      nReps = 1
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      Routine set_skips_and_correct_key
      Routine trial
      Routine cue
      Routine imagine
      Routine blank
      Routine end_run_blank
      Routine run_wait2_2
      Routine waiting_fmri_2
    LoopTerminator loop_all_images
  LoopTerminator loop_runs
